'VERSION 5.6
'January 7, 2015 new LiCor PAR Q52414 cal constant = 7.02, mult = 1.179 LL.
'December 2013 testing LiCor PAR vs Apogee PAR, JeffAdams assist w/program LL.
'July 25, 2013 wind sensor program change ExciteV command off, BrHalf Exchan2 change to ExChan1 per Bill Bradford at CS, L.Levi
'July 24, 2013 code change for HC2S3 TempRH sensor by Lauren Levi ANERR
'March 7 2012 PAR mult 1.2467 for SN Q46382 by Lauren Levi ANERR
'March 29 2012 PAR mult 1.228 for SN Q46892 by Lauren Levi ANERR
'Last Modified: September 2nd, 2008 by Jay Poucher

'5.6 added "card out" command to support flash card memory
'Version 5.5 changes, Search for '*** to display these additions
'Added 24 hour rain total (DailyRain) to SWMP table
'Applied a new Field Name for Daily Rain as CumPrcp
'Made GOESDailyRain = DailyRain*1000 output for transmission
'Added Variable GOESDailyRain & GoesPar to public
'Set Units for GOESDailyRain and DailyRain to mm
'Set Units for GOESPar to mmoles/m^2
'Applied a new Field Name for GOESDaily Rain as G_CumPrcp
'Reset DailyRain to Zero at midnight
'Reset GOESDailyRain to Zero at midnight
'Deleted the  If Par < 0 then Par is 0 line as per DMC 2007
'Changed "Day" to "Days" in Alias time(3) due to conflict with new CR1000 Firmware
'Version 4.0 changes:
'Last Modified: June 21st, 2007 by Jay Poucher
' Add check on wind speed. If NAN, don't include sample is processing for
' wind vector instruction. Reason: clock set function causing 1 bad wind sample per day
' which causes one bad wind summery per day. Added variable WindGood as boolean, set true
' or false after wind speed pulse read in struction. WindGood is used as the process
' disable variable in the Windvector() function. Search for MOD** to see changes

' 12/20/06 Changed the HMP45C from a 12V to SW-12, lines 257, 258 & 261
'Version 3.0 changes:
' 08/30/2006 
'		Changes made as requested by the Data Management Committee:
'		- fiftnmin table name changed to SWMP
'		- Relative humidity min/max, pressure min/max, wind speed min and time fields were dropped
'		- fieldnames instructions added to SWMP data table to generate consistent with cr10x/CDMO fieldnames
'		- RHumidity > 100 and PAR < 0 instructions dropped, over or under values will be handled post processing
'		- subroutine now used to generate min/max values and timestamps for both SWMP and GOESOUT tables 
'		Additonal changes made:
'		- revision of variable names within program for consistency and improved readability
'		- Units instructions were added to enable output of parameter units in data table headers 
'				when using TOA5 long header ASCII download format
' 09/12/2006
'		- Added colon to max/min timestamps in SWMP table
'		- Added fieldnames instructions to GOES table (GOES field names same as SWMP with 'G_' prepended)
'		Changed the HMP45C from a control port to a switched 12V port
 
'NERRS Site: Apalachicola
'Location: East Point, FL
'Site: East Bay
'NESDIS Assignments:
'ID=3B01C09E
'Transmit Time (mm:ss after the hour) = 0:50
'ST MsgWindow = 10 sec
'ST Channel = 145
'ST BPS = 300
'Random Channel = 0
'Random BPS = 0
'ST Repeat Interval = 1 hour
'ST Offset = 0 minute, 50 secs
'Random Repeat Interval = 0 hour

'Sensor list (ports/channels used in prog):
'HMP45AC (6-wire) Temperature & Relative Humidity 		(se1 se2)
'Campbell CS105 (PTB101B) Barometric Pressure Sensor  			(se3 on all the time)
'RM Young 5103-5 Wind Speed & Direction Sensor 			(p1 se4 ex1)
'Texas Electronics TE-525 Rain Gauge 														(p2)
'LI190SB Quantum Sensor 														(diff3 == se5 se6)
'***REMEMBER TO SET PAR MULTIPLIER IN PUBLIC TABLE****

'Holds Sensor Calibration Settings for Easy Access in the Numeric Display
PreserveVariables

'For Easy Site Identification in the Data Header (Parseable)
' 	NOTE: this instruction is probably not doing anything as the 
'		variable is stored in the status table but never called

StationName (APAEBMET)

'Time offset for GMT time
'http://wwp.greenwichmeantime.com/
const GMTOFFSET=5

'''Declare Public Variables
'  Parameters directly sampled by sensors
Public AirTemp, RHumidity, Pressure, WindSpd, WindDir, Precip, PAR, Batt, WindGood as boolean'MOD**
Public pTempC, parMultiplier, DailyRain '***
Public PAR_Den,APAR_T,APAR_Den

'Public TotalRad, totRadMultiplier 		'uncomment if total radiation sensor installed (remember to add to tables)
'Public EppleyPyr, eppMultiplier 'uncomment if eppley pyrometer is installed
'EnclosureRH 	     'uncomment if relative humidity sensor installed in enclosure

' GOES output variables 
Public goesSetResult,goesFailures,gpsLoc(6),gpsTime(7)

' Variables used in max and min subroutine and to calculate timestamps 
Public atMax,atMaxTime,atMin,atMinTime,wsMax,wsMaxTime
Public atMaxTimeSwmp as string,atMinTimeSwmp as string,wsMaxTimeSwmp as string

' Variables used for integer translations in the GOES Output
public goesAT,goesATMax,goesATMin,goesRH,goesBP,goesWS,goesWD,goesWSD,goesWSMax,goesPar,goesPrecip,goesBatt,goesDailyRain '***

Public Time(9) 'array to store time

'''Define aliases to give array fields more readable names:
Alias time(1) = Year
Alias time(2) = Month
Alias time(3) = Days
Alias time(4) = Hour
Alias time(5) = Minute
Alias time(6) = Second
Alias time(7) = Microsecond
Alias time(8) = DayofWeek
Alias time(9) = DayofYear

Alias gpsTime(1) = gYear
Alias gpsTime(2) = gMonth
Alias gpsTime(3) = gDay
Alias gpsTime(4) = gHour
Alias gpsTime(5) = gMinute
Alias gpsTime(6) = gSecond
Alias gpsTime(7) = gMicroSecond   

Alias gpsLoc(1) = gpsResult 	'GOESgps instruction result code
Alias gpsLoc(2) = gpsSeconds 	'seconds since Jan 1, 2000
Alias gpsLoc(3) = gpsLat  		'Fractional degrees; 100 nanodegree resolution
Alias gpsLoc(4) = gpsLon			'Fractional degrees; 100 nanodegree resolution
Alias gpsLoc(5) = gpsElev  		'Signed 32-bit number, in centimeters
Alias gpsLoc(6) = gpsMagElev  'Fractional degrees; 1 millidegree resolution 

'''Define units for SWMP data table output
Units AirTemp = C
Units atMax = C
Units atMin = C
Units RHumidity = %
Units Pressure = mb
Units WindSpd = m/s
Units WindDir = deg
Units	Precip = mm
Units PAR = mmoles/m^2
Units Batt = Volts
Units DailyRain = mm '***

' Define units of max/min timestamps used in SWMP table
Units atMaxTimeSwmp = hhmm
Units atMinTimeSwmp = hhmm 
Units wsMaxTimeSwmp = hhmm

' Define units of max/min timestamps used in GOES table
Units atMaxTime = hhmm
Units atMinTime = hhmm  
Units wsMaxTime = hhmm

' Define units for GOES data table output
Units goesAT = C
Units goesATMax = C
Units goesATMin = C
Units goesRH = %
Units goesBP = mb
Units goesWS = m/s
Units goesWD = Deg
Units goesWSD = m/s
Units goesWSMax = m/s
Units goesPrecip = mm
Units goesBatt = Volts
Units goesDailyRain = mm '***
Units goesPar = mmoles/m^2 '***

'''Define Data Tables:
' The SWMP data table definition:
DataTable (SWMP,1,-1)
	DataInterval (0,15,min,10)
		CardOut (0 ,-1)
	Average (1,AirTemp,IEEE4,False)
	Fieldnames("ATemp") 'instruction is used to output desired fieldnames in output table headers
	Sample (1,atMax,IEEE4)
	Fieldnames("MaxTemp")
	Sample (1,atMaxTimeSwmp,String)
	Fieldnames ("MaxTempT")
	Sample (1,atMin,IEEE4)
	Fieldnames("MinTemp")
	Sample (1,atMinTimeSwmp,String)
	Fieldnames("MinTempT")
	Average (1,RHumidity,IEEE4,False)
	Fieldnames("RH")
	Average (1,Pressure,IEEE4,False)
	Fieldnames("BP")
	WindVector (1,WindSpd,WindDir,IEEE4,WindGood,0,0,0)'MOD**
	Fieldnames("WSpd,Wdir,SDWDir")
	Sample (1,wsMax,IEEE4)
	Fieldnames("MaxWSpd")
	Sample (1,wsMaxTimeSwmp,String)
	Fieldnames("MaxWSpdT")
	Totalize (1,Precip,IEEE4,False)
	Fieldnames("TotPrcp")
	Totalize(1,PAR,IEEE4,False)
	Fieldnames("TotPAR")
	Average (1,Batt,IEEE4,False)
	Fieldnames("AvgVolt")
	Sample(1,DailyRain,IEEE4) '***
	Fieldnames("CumPrcp") '***
EndTable

' The Goes Output Data Table Def
DataTable (GOESOUT,1,-1)
	DataInterval (0,15,min,10)
	Average(1,goesAT,IEEE4,False)
	Fieldnames("G_ATemp")
	Sample(1,goesATMax,IEEE4)
	Fieldnames("G_MaxTemp")
	Sample(1,atMaxTime,IEEE4)
	Fieldnames("G_MaxTempT")
	Sample(1,goesATMin,IEEE4)
	Fieldnames("G_MinTemp")
	Sample(1,atMinTime,IEEE4)
	Fieldnames("G_MinTempT")
	Average (1,goesRH,IEEE4,False)
	Fieldnames("G_RH")
	Average (1,goesBP,IEEE4,False)
	Fieldnames("G_BP")
	Sample (1,goesWS,IEEE4)
	Fieldnames("G_WSpd")
	Sample (1,goesWD,IEEE4)
	Fieldnames("G_Wdir")
	Sample (1,goesWSD,IEEE4)
	Fieldnames("G_SDWDir")
	Sample(1,goesWSMax,IEEE4)
	Fieldnames("G_MaxWSpd")
	Sample(1,wsMaxTime,IEEE4)
	Fieldnames("G_MaxWSpdT")
	Totalize (1,goesPrecip,IEEE4,False)
	Fieldnames("G_TotPrcp")
	Totalize (1,goesPAR,IEEE4,False)
	Fieldnames("G_TotPAR")
	Average (1,goesBatt,IEEE4,False)
	Fieldnames("G_AvgVolt")
	Sample(1,GOESDailyRain,IEEE4) '***
	Fieldnames("G_CumPrcp") '***
EndTable

'Table used to record PAR data
DataTable (PAR_Table,True,-1)
  DataInterval (0,15,min,10)
  Totalize(1,PAR,IEEE4,False)
  Average (1,PAR_Den,IEEE4,False)
  Totalize (1,APAR_T,IEEE4,False)
  Average (1,APAR_Den,IEEE4,False)
EndTable

'''Subroutines:
' Sub to calculate max/min and timestamps for SWMP table (goes integer values are derived from)
Sub MaxMin
	if AirTemp < atMin then 	'Track Min and time of Min air temp
		atMin = AirTemp
		Realtime(time())
		atMinTime = Hour*100+Minute 'time formatted as integer for GOES table
		atMinTimeSwmp = Hour + ":" + Minute 'time formatted as string for SWMP table
	endif
	If AirTemp > atMax then	'Track Max and time of Max air temp
		atMax = AirTemp
		Realtime(time())
		atMaxTime = Hour*100+Minute
		atMaxTimeSwmp = Hour + ":" + Minute
	endif
	If WindSpd > wsMax then	'Track Max and time of max wind
		wsMax = WindSpd
		Realtime(time())
		wsMaxTime = Hour*100+Minute
		wsMaxTimeSwmp = Hour + ":" + Minute
	endif
endsub

' Sub to setup for the GOES TX312 transmitter
Sub setup
	GOESSetup (goesSetResult,&H3B01C09E,10,145,300,0,100,"0_1_0_0","0_0_50","0_0_0")
endsub

'Main Program
BeginProg
	'Initialize Min & Max Variables
	atMin = 20000
	atMax = -20000
	wsMax = -20000
	'initialize so goes setup subroutine will be called on first run of program
	goesSetResult = -1
	'Scan Rate
	Scan (5,Sec,0,0)
	
	'''Begin sensor settings
		'Reference Temperature in C and Battery Voltage in Volts
		PanelTemp (PTempC,250)
		Battery (Batt)
		'Convert and Store as Integer for Transmission

		'HC2S3 Air Temp AND Relative Humidity Probe
		portset (9,1)
		Delay (0,3,Sec)
		VoltSe(AirTemp,1,mV2500,1,0,0,_60Hz,0.1,-40.0)
		VoltSE(RHumidity,1,mV2500,2,0,0,_60Hz,0.1,0)
		portset (9,0)

		'Campbell CS105 (BTP101B) Barometric Pressure Sensor measurement "Pressure" in mb on all the time...
		VoltSE(Pressure,1,mV2500,3,1,0,_60Hz,0.184,600.0)

		'RM Young	5103-5 Wind Speed & Direction Sensor measurements Wind_Spd in ms & Wind_Dir in Degrees
		PulseCount(WindSpd,1,1,1,1,0.098,0)
		if WindSpd = NAN then'MOD**
			WindGood = true'MOD**
		else'MOD**
			WindGood = false'MOD**
		endif'MOD**		
		'ExciteV (Vx1,2500,200)
		BrHalf(WindDir,1,mV2500,4,1,1,2500,True,0,_60Hz,355,0)
		If WindDir>=360 Then WindDir=0
		If WindDir<0 Then WindDir=0

		'Texas Electronics TE-525 Rain Gauge measurement Precip in mm
		PulseCount(Precip,1,2,2,0,0.254,0)
		DailyRain = DailyRain+Precip '***

		'LI190SB Quantum Sensor measurements PAR:
		VoltDiff(PAR_Den,1,mV25,3,True,0,_60Hz,1,0)
		PAR=PAR_Den * 1.179
    PAR_Den=PAR_Den * 255.498
    
    'Apogee SQ-110 Quantum sensor PAR
    'measurement
    'APAR_Den is the Flux Density
    'in umoles/s/m^2
    'APAR is Total Flux for 5 second
    'scan in mmoles/m^2
    'Red-SE9, Black-SE10, Clear-Ground
    VoltDiff (APAR_Den,1,mV2500,5,True ,0,_60Hz,1,0)
    APAR_T=APAR_Den*0.025
    APAR_Den=APAR_Den*5.0

'''End sensor settings

		'Reset station clock using GPS clock
		If TimeintoInterval (722,1440,min) then	'at two minutes past noon set clock to gps clock
			GOESGPS (gpsloc(),gpsTime())
			if gpsResult=0and gHour<24and gHour>=0and gMinute<60and gMinute>=0and gSecond<60and gSecond>=0 then
				gHour = gHour - GMTOFFSET 'adjust clock in GMT to local time
				if gHour<0 then
					gHour=gHour+24
				endif
				ClockSet (gpsTime())
			Endif
		endif
		
		call MaxMin		'track airTempMax, airTempMin, wsMax and times
		
		CallTable SWMP
		CallTable PAR_Table

		'Convert and store as integers for GOES transmission (only those not already integers)
		goesBatt = Batt * 100
		goesAT = AirTemp * 100
		goesATMAx = atMax * 100
		goesATMin = atMin * 100
		goesRH = RHumidity * 10
		goesBP = Pressure * 10
		goesPrecip = Precip * 1000
		goesPar = Par
		goesWSMax = wsMax * 100
		goesDailyRain = DailyRain*1000 '***
		
		'following must be called only after Fiftnmin table written to because 
		'   values are generated by WindVector instruction
		goesWS = SWMP.WSpd*100
		goesWD = SWMP.Wdir*10
		goesWSD = SWMP.SDWDir*10

		CallTable GOESOUT
		
		'GOES Instructions
		'		send to transmitter at time atleast 2 minutes before transmit time
		If TimeintoInterval (58,60,Min) then
			GOESData (goesFailures,GOESOUT,0,1,2)
		endif
		
		'Run setup subroutine if GOESSetResult is anything other than 0
		if goesSetResult then call setup

		if TimeintoInterval(0,15,min) then	'After Min and Max are written by MaxMin sub
			atMin = 20000		'reset initial conditions for temp min and max and wind spd max
			atMax = -20000
			wsMax = -20000
		endif

		'reset all daily rain values to 0 every 24 hours
		if iftime(0,1440,min) then DailyRain = 0 '***
		if iftime(0,1440,min) then GoesDailyRain = 0 '***
		
	NextScan
EndProg

