'VERSION 6.0

'Last Modified: July 7, 2014 by Patrick O'Donnell
'CR105 replaced CR106 

'Version 6.0 changes: on 01/07/14 changed ParMultiplier to 1.02 for LiCor LI190SB serial # Q42698

'Last Modified: March 12, 2012 by Patrick O'Donnell
'CR106 replaced CR105


'Version 6.0 changes: on 11/30/11 changed ParMultiplier to 1.10 for LiCor LI190SB serial # Q42745

'Version 6.0 changes: on 2/8/11 Removed ParMultiplier variable and added fixed
'variable of 1.0519 for LiCor LI190SB serial # 42698

'updated CR1000 firmware to OS21 on 12/27/10 at 15:00 by Chris 

'updated CR1000 firmware to OS18 on 4/26/10 at 15:25 by Chris

'Site was changed from Visitor's Center to Martin property by Chris
'New weather station and tower assembled at Martin property and operating on 10/28/09 at 12:10

'Visitor Center weather station was disassembled on 6/12/09
'last download at 8:30 by Chris 

'Version 5.5 changes, Search for '*** to display these additions
'Added 24 hour rain total (DailyRain) to SWMP table
'Applied a new Field Name for Daily Rain as CumPrcp
'Made GOESDailyRain = DailyRain*1000 output for transmission
'Added Variable GOESDailyRain & GoesPar to public
'Set Units for GOESDailyRain and DailyRain to mm
'Set Units for GOESPar to mmoles/m^2
'Applied a new Field Name for GOESDaily Rain as G_CumPrcp
'Reset DailyRain to Zero at midnight
'Reset GOESDailyRain to Zero at midnight
'Deleted the  If Par < 0 then Par is 0 line as per DMC 2007
'Changed "Day" to "Days" in Alias time(3) due to conflict with new CR1000 Firmware

'Version 4.0 changes:
'Last Modified: June 21st, 2007 by Jay Poucher
' Add check on wind speed. If NAN, don't include sample is processing for
' wind vector instruction. Reason: clock set function causing 1 bad wind sample per day
' which causes one bad wind summery per day. Added variable WindGood as boolean, set true
' or false after wind speed pulse read in struction. WindGood is used as the process
' disable variable in the Windvector() function. Search for MOD** to see changes

'Version 3.0 changes:
' 08/30/2006 
'		Changes made as requested by the Data Management Committee:
'		- fiftnmin table name changed to SWMP
'		- Relative humidity min/max, pressure min/max, wind speed min and time fields were dropped
'		- fieldnames instructions added to SWMP data table to generate consistent with cr10x/CDMO fieldnames
'		- RHumidity > 100 and PAR < 0 instructions dropped, over or under values will be handled post processing
'		- subroutine now used to generate min/max values and timestamps for both SWMP and GOESOUT tables 
'		Additonal changes made:
'		- revision of variable names within program for consistency and improved readability
'		- Units instructions were added to enable output of parameter units in data table headers 
'				when using TOA5 long header ASCII download format
' 09/12/2006
'		- Added colon to max/min timestamps in SWMP table
'		- Added fieldnames instructions to GOES table (GOES field names same as SWMP with 'G_' prepended)
'		Changed the HMP45C from a control port to a switched 12V port
' 10/05/06
'Incorporated Jeff Jeffersons UltraSonic Wind Sensor & associated tables for comparison with the 35C
' 3/27/07 Jay Poucher
'		-Changed to Standard NERRS Sensor Order Wiring Sequence 
'		-Changed 45C amd 35C to Sw12 Port
'		-Changed to activate the 45C sensor and De-Activate the 35C
' 05/04/07 Jay Poucher
'		-Removed the RT Young as the primany wind sensor and put on standby in program 
'Search for *** to reveal all changes

'NERRS Site: Rookery Bay
'Location: Naples, Florida
'Site: Martin property
'NESDIS Assignments:
'ID=3B01D3E8
'ST MsgWindow = 10 sec
'ST Channel = 145
'ST BPS = 300
'Random Channel = 0
'Random BPS = 0
'ST Repeat Interval = 1 hour
'ST Offset = 1 minute, 0 secs
'Random Repeat Interval = 0 hour

'Sensor list (ports/channels used in prog):
'HMP35C Temperature & Relative Humidity Sensor			(se1 & se2, Switched through port SW12)
'Vaisala CS105 Barometric Pressure Sensor						(se3 on all the time)
'Viasala 425 SDI-12 Ultra-Sonic Wind Sensor					(C7)
'RM Young 5103-5 Wind Speed & Direction Sensor 			(p1 & se4, *** On Stanby)
'Texas Electronics TE-525 Rain Gauge								(p2)
' LiCor LI-190SB Quantum Sensor 										(diff3 == se5 se6)
'***REMEMBER TO SET PAR MULTIPLIER IN PUBLIC TABLE****

'Holds Sensor Calibration Settings for Easy Access in the Numeric Display
PreserveVariables

'For Easy Site Identification in the Data Header (Parseable)
' 	NOTE: this instruction is probably not doing anything as the 
'		variable is stored in the status table but never called

StationName (rkbuhmet)

'Time offset for GMT time
'http://wwp.greenwichmeantime.com/
const GMTOFFSET=5

'''Declare Public Variables
'  Parameters directly sampled by sensors
Public AirTemp, RHumidity, Pressure, Precip, PAR, Batt, WindGood as boolean'MOD**
Public pTempC, DailyRain '***
'Public TotalRad, totRadMultiplier 		'uncomment if total radiation sensor installed (remember to add to tables)
'Public EppleyPyr, eppMultiplier 'uncomment if eppley pyrometer is installed
'EnclosureRH 	     'uncomment if relative humidity sensor installed in enclosure
' WindSpd, WindDir (Uncomment when toggeling back to RM Young)***

' GOES output variables 
Public goesSetResult,goesFailures,gpsLoc(6),gpsTime(7)

' Variables used in max and min subroutine and to calculate timestamps 
Public atMax,atMaxTime,atMin,atMinTime,wsMax,wsMaxTime
Public atMaxTimeSwmp as string,atMinTimeSwmp as string,wsMaxTimeSwmp as string

' Variables used for integer translations in the GOES Output
public goesAT,goesATMax,goesATMin,goesRH,goesBP,goesWS,goesWD,goesWSD,goesWSMax,goesPar,goesPrecip,goesBatt,goesDailyRain '***

'values in the 2 lines below are the Wind sensor comparison values
'Public RMY_wsMax,RMY_wsMaxTime,RMY_WSx10,US_wsMax,US_wsMaxTime,US_WSx10
'Public RMY_WSavg,RMY_WDavg,RMY_WSD,US_WSavg,US_WDavg,US_WSD
Public Wind(5) ' array to store wind variables from Vaisala Ultrasonic Wind Sensor

Public Time(9) 'array to store time

'''Define aliases to give array fields more readable names:
Alias time(1) = Year
Alias time(2) = Month
Alias time(3) = Days
Alias time(4) = Hour
Alias time(5) = Minute
Alias time(6) = Second
Alias time(7) = Microsecond
Alias time(8) = DayofWeek
Alias time(9) = DayofYear

Alias gpsTime(1) = gYear
Alias gpsTime(2) = gMonth
Alias gpsTime(3) = gDay
Alias gpsTime(4) = gHour
Alias gpsTime(5) = gMinute
Alias gpsTime(6) = gSecond
Alias gpsTime(7) = gMicroSecond   

Alias gpsLoc(1) = gpsResult 	'GOESgps instruction result code
Alias gpsLoc(2) = gpsSeconds 	'seconds since Jan 1, 2000
Alias gpsLoc(3) = gpsLat  		'Fractional degrees; 100 nanodegree resolution
Alias gpsLoc(4) = gpsLon			'Fractional degrees; 100 nanodegree resolution
Alias gpsLoc(5) = gpsElev  		'Signed 32-bit number, in centimeters
Alias gpsLoc(6) = gpsMagElev  'Fractional degrees; 1 millidegree resolution 

'(Old US Variable names) ***
'Alias Wind(1)=USWind_Spd 
'Alias Wind(2)=USWind_Dir

'(New US Variable names) ***
Alias Wind(1)=WindSpd 
Alias Wind(2)=WindDir

'''Define units for SWMP data table output
Units AirTemp = C
Units atMax = C
Units atMin = C
Units RHumidity = %
Units Pressure = mb
Units WindSpd = m/s
Units WindDir = deg
Units	Precip = mm
Units PAR = mmoles/m^2
Units Batt = Volts
Units DailyRain = mm '***

' Define units of max/min timestamps used in SWMP table
Units atMaxTimeSwmp = hhmm
Units atMinTimeSwmp = hhmm 
Units wsMaxTimeSwmp = hhmm

' Define units of max/min timestamps used in GOES table
Units atMaxTime = hhmm
Units atMinTime = hhmm  
Units wsMaxTime = hhmm

' Define units for GOES data table output
Units goesAT = C
Units goesATMax = C
Units goesATMin = C
Units goesRH = %
Units goesBP = mb
Units goesWS = m/s
Units goesWD = Deg
Units goesWSD = m/s
Units goesWSMax = m/s
Units goesPrecip = mm
Units goesBatt = Volts
Units goesDailyRain = mm '***
Units goesPar = mmoles/m^2 '***

' Define units for wind comparson data
'Units USWind_Spd = m/s
'Units USWind_Dir = Deg
'Units RMY_WSavg = m/s
'Units RMY_WDavg = Deg
'Units RMY_WSD = m/s
'Units RMY_wsMax = m/s
'Units RMY_wsMaxTime = hhmm
'Units US_WSavg = m/s
'Units US_WDavg = Deg
'Units US_WSD = m/s
'Units US_wsMax = m/s
'Units US_wsMaxTime = hhmm


'''Define Data Tables:
' The SWMP data table definition:
DataTable (SWMP,1,-1)
	DataInterval (0,15,min,10)
	Average (1,AirTemp,IEEE4,False)
	Fieldnames("ATemp") 'instruction is used to output desired fieldnames in output table headers
	Sample (1,atMax,IEEE4)
	Fieldnames("MaxTemp")
	Sample (1,atMaxTimeSwmp,String)
	Fieldnames ("MaxTempT")
	Sample (1,atMin,IEEE4)
	Fieldnames("MinTemp")
	Sample (1,atMinTimeSwmp,String)
	Fieldnames("MinTempT")
	Average (1,RHumidity,IEEE4,False)
	Fieldnames("RH")
	Average (1,Pressure,IEEE4,False)
	Fieldnames("BP")
	WindVector (1,WindSpd,WindDir,IEEE4,WindGood,0,0,0)'MOD**
	Fieldnames("WSpd,Wdir,SDWDir")
	Sample (1,wsMax,IEEE4)
	Fieldnames("MaxWSpd")
	Sample (1,wsMaxTimeSwmp,String)
	Fieldnames("MaxWSpdT")
	Totalize (1,Precip,IEEE4,False)
	Fieldnames("TotPrcp")
	Totalize(1,PAR,IEEE4,False)
	Fieldnames("TotPAR")
	Average (1,Batt,IEEE4,False)
	Fieldnames("AvgVolt")
	Sample(1,DailyRain,IEEE4) '***
	Fieldnames("CumPrcp") '***
EndTable

' The Goes Output Data Table Def
DataTable (GOESOUT,1,-1)
	DataInterval (0,15,min,10)
	Average(1,goesAT,IEEE4,False)
	Fieldnames("G_ATemp")
	Sample(1,goesATMax,IEEE4)
	Fieldnames("G_MaxTemp")
	Sample(1,atMaxTime,IEEE4)
	Fieldnames("G_MaxTempT")
	Sample(1,goesATMin,IEEE4)
	Fieldnames("G_MinTemp")
	Sample(1,atMinTime,IEEE4)
	Fieldnames("G_MinTempT")
	Average (1,goesRH,IEEE4,False)
	Fieldnames("G_RH")
	Average (1,goesBP,IEEE4,False)
	Fieldnames("G_BP")
	Sample (1,goesWS,IEEE4)
	Fieldnames("G_WSpd")
	Sample (1,goesWD,IEEE4)
	Fieldnames("G_Wdir")
	Sample (1,goesWSD,IEEE4)
	Fieldnames("G_SDWDir")
	Sample(1,goesWSMax,IEEE4)
	Fieldnames("G_MaxWSpd")
	Sample(1,wsMaxTime,IEEE4)
	Fieldnames("G_MaxWSpdT")
	Totalize (1,goesPrecip,IEEE4,False)
	Fieldnames("G_TotPrcp")
	Totalize (1,goesPAR,IEEE4,False)
	Fieldnames("G_TotPAR")
	Average (1,goesBatt,IEEE4,False)
	Fieldnames("G_AvgVolt")
	Sample(1,GOESDailyRain,IEEE4) '***
	Fieldnames("G_CumPrcp") '***
EndTable

'Wind Sensor Vaisala Fifteen Minute Table ***
'DataTable (Vaisala,1,-1)
'	DataInterval (0,15,min,10)
'	WindVector (1,USWind_Spd,USWind_Dir,IEEE4,False,0,0,0)
'	Maximum (1,USWind_Spd,IEEE4,False,True)
'	Minimum (1,USWind_Spd,IEEE4,False,True)
'EndTable

'Wind Sensor Comparison Table ***
'DataTable (Winds,1,-1)
'	DataInterval (0,15,min,10)
'	Sample (1,RMY_WSavg,IEEE4)
'	Sample (1,RMY_WDavg,IEEE4)
'	Sample (1,RMY_WSD,IEEE4)
'	Sample(1,RMY_wsMax,IEEE4)			'	Maximum Wind_Spd
'	Sample(1,RMY_wsMaxTime,IEEE4)	' Time of Max wind Speed
'	Sample (1,US_WSavg,IEEE4)
'	Sample (1,US_WDavg,IEEE4)
'	Sample (1,US_WSD,IEEE4)
'	Sample(1,US_wsMax,IEEE4)
'	Sample(1,US_wsMaxTime,IEEE4)
'EndTable

'''Subroutines:
' Sub to calculate max/min and timestamps for SWMP table (goes integer values are derived from)
Sub MaxMin
	if AirTemp < atMin then 	'Track Min and time of Min air temp
		atMin = AirTemp
		Realtime(time())
		atMinTime = Hour*100+Minute 'time formatted as integer for GOES table
		atMinTimeSwmp = Hour + ":" + Minute 'time formatted as string for SWMP table
	endif
	If AirTemp > atMax then	'Track Max and time of Max air temp
		atMax = AirTemp
		Realtime(time())
		atMaxTime = Hour*100+Minute
		atMaxTimeSwmp = Hour + ":" + Minute
	endif
	If WindSpd > wsMax then	'Track Max and time of max wind
		wsMax = WindSpd
		Realtime(time())
		wsMaxTime = Hour*100+Minute
		wsMaxTimeSwmp = Hour + ":" + Minute
	endif
endsub

' Sub to setup for the GOES TX312 transmitter
Sub setup
	GOESSetup (GOESsetResult,&H3B01D3E8,10,145,300,0,100,"0_1_0_0","0_1_0","0_0_0")
endsub

'Main Program
BeginProg
	'Initialize Min & Max Variables
	atMin = 20000
	atMax = -20000
	wsMax = -20000
'	RMY_wsMax = -20000 ***
'	US_wsMax = -20000 ***
	
	'initialize so goes setup subroutine will be called on first run of program
	goesSetResult = -1
	
	'Scan Rate
	Scan (5,Sec,0,0)
	
	'''Begin sensor settings
		'Reference Temperature in C and Battery Voltage in Volts
		PanelTemp (PTempC,250)
		Battery (Batt)

		'HMP35C Temperature & Relative Humidity Sensor measurements AirTemp and RH:
		Therm107(AirTemp,1,1,1,0,_60Hz,1.0,0.0)
		PortSet(9,1)
		Delay(0,150,mSec)
		VoltSE(RHumidity,1,mV2500,2,0,0,_60Hz,0.1,0)
		PortSet(9,0)
		If RHumidity>100 And RHumidity<108 Then RHumidity=100

		'Measure Vaisala CS105 Barometric Pressure in mb on all the time...
		VoltSE (Pressure,1,mV2500,3,1,0,_60Hz,.184,600)

		'Measure Vaisala CS106 Barometric Pressure in mb on all the time...
		'VoltSE (Pressure,1,mV2500,3,1,0,_60Hz,.240,500)

		'Measure 425 Ultra-Sonic Wind Sensor ***
		SDI12Recorder (Wind(),7,0,"M!",1.0,0)
		if WindSpd = NAN then'MOD**
			WindGood = true'MOD**
		else'MOD**
			WindGood = false'MOD**
		endif'MOD**
		If WindDir>=360 Then WindDir=0
		WindSpd=WindSpd*.447 'Converts mph to m/s

		'Measure RM Young 5103 Wind Monitor ***
		'Replaced by Vaisala Ultrasonic sensor above
		'PulseCount(WindSpd,1,1,1,1,0.098,0)
		'if WindSpd = NAN then'MOD**
		'	WindGood = true'MOD**
		'else'MOD**
		'	WindGood = false'MOD**
		'endif'MOD**
		'BrHalf (WindDir,1,mV2500,4,Vx1,1,2500,True ,0,_60Hz,355,0)
		'If WindDir>=360 Then WindDir=0

		'Precipitation
		PulseCount (Precip,1,2,2,0,.254,0)
		DailyRain = DailyRain+Precip '***

		'PAR LiCor LI-190
		VoltDiff(PAR,1,mV25,3,True,0,_60Hz,1.02,0)'(se5 & se6)

'''End sensor settings

		'Reset station clock using GPS clock
		If TimeintoInterval (722,1440,min) then	'at two minutes past noon set clock to gps clock
			GOESGPS (gpsloc(),gpsTime())
			if gpsResult=0and gHour<24and gHour>=0and gMinute<60and gMinute>=0and gSecond<60and gSecond>=0 then
				gHour = gHour - GMTOFFSET 'adjust clock in GMT to local time
				if gHour<0 then
					gHour=gHour+24
				endif
				ClockSet (gpsTime())
			Endif
		endif
		
		call MaxMin		'track airTempMax, airTempMin, wsMax and times
		
		CallTable SWMP
		
		'Convert and store as integers for GOES transmission (only those not already integers)
		goesBatt = Batt * 100
		goesAT = AirTemp * 100
		goesATMAx = atMax * 100
		goesATMin = atMin * 100
		goesRH = RHumidity * 10
		goesBP = Pressure * 10
		goesPrecip = Precip * 1000
		goesPar = Par
		goesWSMax = wsMax * 100
		goesDailyRain = DailyRain*1000 '***
		
		'following must be called only after Fiftnmin table written to because 
		'   values are generated by WindVector instruction
		goesWS = SWMP.WSpd*100
		goesWD = SWMP.Wdir*10
		goesWSD = SWMP.SDWDir*10

		CallTable GOESOUT

'		CallTable Vaisala ***
'		'values called for the wind sensor comparison table
'		US_WSavg=Vaisala.USWind_Spd_WVc(1,1)
'		US_WDavg=Vaisala.USWind_Spd_WVc(2,1)
'		US_WSD=Vaisala.USWind_Spd_WVc(3,1)
'		US_WSx10=USWind_Spd
		
'		CallTable Winds ***
		
		'GOES Instructions
		'		send to transmitter at time atleast 2 minutes before transmit time
		If TimeintoInterval (59,60,Min) then
			GOESData (goesFailures,GOESOUT,0,1,2)
		endif
		
		'Run setup subroutine if GOESSetResult is anything other than 0
		if goesSetResult then call setup

		if TimeintoInterval(0,15,min) then	'After Min and Max are written by MaxMin sub
			atMin = 20000		'reset initial conditions for temp min and max and wind spd max
			atMax = -20000
			wsMax = -20000
'			RMY_wsMax = -20000 ***
'	    US_wsMax = -20000 ***
		endif

		'reset all daily rain values to 0 every 24 hours
		if iftime(0,1440,min) then DailyRain = 0 '***
		if iftime(0,1440,min) then goesDailyRain = 0 '***
		
	NextScan
EndProg

